# Generated by Configurator on Fri Jun 22 15:54:57 PDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM9,SerialManager,COM9
Device,ZeissScope,ZeissTest,ZeissScope
Device,ZeissXYStage,ZeissTest,ZeissXYStage
Device,ZeissFocusAxis,ZeissTest,ZeissFocusAxis
Device,IDS uEye,IDS_uEye,IDS uEye

# Pre-init settings for devices
Property,ZeissScope,AnswerTimeOut,250.0000
Property,ZeissScope,DefiniteFocusVersion,1
Property,ZeissScope,Port,COM9

# Pre-init settings for COM ports
Property,COM9,AnswerTimeout,500.0000
Property,COM9,BaudRate,57600
Property,COM9,DelayBetweenCharsMs,0.0000
Property,COM9,Handshaking,Off
Property,COM9,Parity,None
Property,COM9,StopBits,1
Property,COM9,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZeissFocusAxis,0

# Roles
Property,Core,Camera,IDS uEye
Property,Core,Focus,ZeissFocusAxis
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

